PsychoPy2experiment version="1.83.04"
Settings
  Data filename = 'data/%s_%s_%s' %(expInfo['participant'], expName, expInfo['date'])
  Monitor = testMonitor
  Window size (pixels) = [1280, 1024]
  Full-screen window = True
  Experiment info = {u'session': u'001', u'participant': u''}
  expName = textInputTest
  Units = pix
  Screen = 1
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Routines
  Routine end
    TextComponent text_2
      stopVal [duration (s)] = 3
      startVal [time (s)] = 0.0
      letterHeight = 50
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      text:
        Dieser Teil des Experiments ist nun zu Ende.

        Vielen Dank.
  Routine bekannt
    ImageComponent imageBekannt
      pos = [0, 250]
      startVal [time (s)] = 0.0
      image [set every repeat] = $img
      size = [500, 500]
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    RatingScaleComponent ratingBekannt
      labels = ja nein
      pos = 0, -300
      high = 2
      startVal [time (s)] = 0.0
      size = 1.0
      forceEndRoutine = True
      low = 1
      scaleDescription = bekannt?
      categoryChoices = ja,nein
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    TextComponent text_6
      pos = [0, -150]
      startVal [time (s)] = 0.0
      letterHeight = 28
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      text [set every repeat]:
        $name + '\n' +
        $context + '\n' +
        $descript + '\n\n\n\nBEKANNT?'
  Routine beruf
    CodeComponent code_2
      Begin Experiment:
        inputText = ""
      Begin Routine:
        theseKeys=""
        shift_flag = False
        text_5.alignHoriz ='left'
      End Routine:
        # let's store the final text string into the results finle...
        thisExp.addData('inputText', inputText)
        inputText=""
      Each Frame:
        n= len(theseKeys)
        i = 0
        while i < n:

            if theseKeys[i] == 'return':
                # pressing RETURN means time to stop
                continueRoutine = False
                break

            elif theseKeys[i] == 'backspace':
                inputText = inputText[:-1]  # lose the final character
                i = i + 1

            elif theseKeys[i] == 'space':
                inputText += ' '
                i = i + 1

            elif theseKeys[i] in ['lshift', 'rshift']:
                shift_flag = True
                i = i + 1

            else:
                if len(theseKeys[i]) == 1:
                    # we only have 1 char so should be a normal key,
                    # otherwise it might be 'ctrl' or similar so ignore it
                    if shift_flag:
                        inputText += chr( ord(theseKeys[i]) - ord(' '))
                        shift_flag = False
                    else:
                        inputText += theseKeys[i]

                i = i + 1
    TextComponent text_5
      text [set every frame] = 'Beruf/Kontext?\n\n' + $inputText
      pos = [-200, -200]
      startVal [time (s)] = 0.0
      letterHeight = 50
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    KeyboardComponent key_resp_4
      forceEndRoutine = False
      startVal [time (s)] = 0.0
      store = all keys
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    ImageComponent image_2
      pos = [0, 100]
      startVal [time (s)] = 0.0
      image [set every repeat] = $pic
      size = [300,300]
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  Routine trial
    StaticComponent ISI
      stopVal [duration (s)] = 0.5
      startVal [time (s)] = 0.0
    TextComponent text
      startVal [time (s)] = 0.0
      letterHeight = 25
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      text:
        Zum Schluss folgt nun ein Durchgang, in dem Ihnen Bilder von berühmten Persönlichkeiten mitsamt Beruf, Kontext und Namen präsentiert werden. Bitte geben Sie bei jeder Person an, ob Sie ihnen bekannt ist oder nicht. Um Ihre Antwort einzugeben, klicken Sie bitte die passende Option entweder mit der Maus an oder drücken die entsprechende Nummer Ihrer Antwort auf der Tastatur.

        Um zu beginnen, drücken Sie bitte die LEERTASTE.
    KeyboardComponent key_resp_2
      forceEndRoutine = True
      allowedKeys = 'space'
      startVal [time (s)] = 0.0
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  Routine bekann
  Routine gatherText
    CodeComponent code
      Begin Experiment:
        inputBeruf = ""
      Begin Routine:
        theseKeys=""
        shift_flag = False
        text_3.alignHoriz ='left'
      End Routine:
        # let's store the final text string into the results finle...
        thisExp.addData('inputBeruf', inputBeruf)
        inputBeruf=""
      Each Frame:
        n= len(theseKeys)
        i = 0
        while i < n:

            if theseKeys[i] == 'return':
                # pressing RETURN means time to stop
                continueRoutine = False
                break

            elif theseKeys[i] == 'backspace':
                inputBeruf = inputText[:-1]  # lose the final character
                i = i + 1

            elif theseKeys[i] == 'space':
                inputBeruf += ' '
                i = i + 1

            elif theseKeys[i] in ['lshift', 'rshift']:
                shift_flag = True
                i = i + 1

            else:
                if len(theseKeys[i]) == 1:
                    # we only have 1 char so should be a normal key,
                    # otherwise it might be 'ctrl' or similar so ignore it
                    if shift_flag:
                        inputBeruf += chr( ord(theseKeys[i]) - ord(' '))
                        shift_flag = False
                    else:
                        inputBeruf += theseKeys[i]

                i = i + 1
    TextComponent text_3
      text [set every frame] = 'Name?\n\n' + $inputBeruf
      pos = [-200, -200]
      startVal [time (s)] = 0.0
      letterHeight = 50
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    KeyboardComponent key_resp_3
      forceEndRoutine = False
      startVal [time (s)] = 0.0
      store = all keys
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    ImageComponent image
      pos = [0,100]
      startVal [time (s)] = 0.0
      image [set every repeat] = $pic
      size = [300,300]
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Flow
  Routine trial
  LoopInitiator trials loopType="TrialHandler"
    conditionsFile = imgList.csv
    loopType = random
    nReps = 1
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    conditions:
      [{'img': u'./img/AlysonHannigan(Lily)1.jpg', 'descript': u'"How I Met Your Mother" (Lily Aldrin)', 'name': u'Alyson Hannigan', 'context': u'Schauspielerin'},
      {'img': u'./img/AngelaMerkel1.jpg', 'descript': u'Bundeskanzlerin CDU', 'name': u'Angela Merkel', 'context': u'Politikerin'},
      {'img': u'./img/BarackObama2.jpg', 'descript': u'Pr\xe4sident der USA Demokratische Partei', 'name': u'Barack Obama', 'context': u'Politiker'},
      {'img': u'./img/CarenMiosga4.jpg', 'descript': u'"tagesthemen" fr\xfcher "ttt - titel thesen temperamente"', 'name': u'Caren Miosga', 'context': u'Moderatorin'},
      {'img': u'./img/EmilyDeschanel3.jpg', 'descript': u'"Bones - Die Knochenj\xe4gerin" (Dr. Temperance \'Bones\' Brennan)', 'name': u'Emily Deschanel', 'context': u'Schauspielerin'},
      {'img': u'./img/GuentherJauch2.jpg', 'descript': u'"Wer wird Million\xe4r?" fr\xfcher "stern TV"', 'name': u'G\xfcnther Jauch', 'context': u'Moderator '},
      {'img': u'./img/HughLaurie(DrHouse)9.jpg', 'descript': u'"Dr. House" (Dr. Gregory House)', 'name': u'Hugh Laurie', 'context': u'Schauspieler '},
      {'img': u'./img/JasonSegel(Marshall)2.jpg', 'descript': u'"How I Met Your Mother" (Marshall Eriksen)', 'name': u'Jason Segel', 'context': u'Schauspieler'},
      {'img': u'./img/KatjaBurkard5.jpg', 'descript': u'"Punkt 12" bei RTL', 'name': u'Katja Burkard', 'context': u'Moderatorin'}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
    Routine bekannt
  LoopTerminator trials
  Routine end
